PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['ID'], expName, expInfo['date'])
  Experiment info = {'ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1280, 720]
  color = $[-1, -1, -1]
  expName = PD
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        import random
        button_list = ['Cooperate', 'Defect']
        button_list_dd=['Yes', 'No']
        choice_list = []
        choice_list_dd=[]

        increment=0.2
        mult=2
        participant_points_total = 0
        other_points_total = 0
      Begin Routine:
        #Randomising button order
        random.shuffle(button_list)
        left_text = button_list[0]
        right_text = button_list[1]

        #Changing bottom text to only show on first trial
        if trial_loop.thisTrialN == 0:
            trial_bottom_text = "Make your choice by clicking one of the boxes"
        else:
            trial_bottom_text = "                                             "
      End Routine:
        #Adding button text to data file
        trial_loop.addData('left_text', left_text)
        trial_loop.addData('right_text', right_text)

        #Saving choice
        if trial_mouse.isPressedIn(left_choice):
            choice = left_text
        elif trial_mouse.isPressedIn(right_choice):
            choice = right_text
        trial_loop.addData('choice_pd', choice)

        choice_list.append(choice)

        #Creating tit for tat strategy (i.e. the other player mimics the participant)
        if trial_loop.thisTrialN == 0:
            other_choice = initial_other_choice
        elif trial_loop.thisTrialN > 0:
            other_choice = choice_list[-2]

        trial_loop.addData('other_choice', other_choice)

        #Saving points gained
        if choice == 'Cooperate' and other_choice == 'Cooperate':
            participant_points = tl_p
            other_points = tl_o
        elif choice == 'Defect' and other_choice == 'Defect':
            participant_points = br_p
            other_points = br_o
        elif choice == 'Cooperate' and other_choice == 'Defect':
            participant_points = bl_p
            other_points = bl_o
        elif choice == 'Defect' and other_choice == 'Cooperate':
            participant_points = tr_p
            other_points = tr_o

        other_points_total += other_points

        trial_loop.addData('participant_points', participant_points)
        trial_loop.addData('other_points', other_points)
        trial_loop.addData('other_points_total', other_points_total)
    ImageComponent trial_avatar_o
      image [set every repeat] = $other_avatar
      pos = (-0.8, 0)
      saveStartStop = False
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    ImageComponent trial_avatar_p
      image [set every repeat] = $chosen_avatar
      pos = (-0.2, 0.7)
      saveStartStop = False
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    PolygonComponent top_left
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent top_right
      fillColor = $None
      lineWidth = 2
      pos = (0.14,0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_left
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,-0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_right
      fillColor = $None
      lineWidth = 2
      pos = (0.14,-0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent trial_tl_p
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_p
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    TextComponent trial_tl_o
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_o
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    TextComponent trial_bl_p
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,-0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $bl_p
    TextComponent trial_bl_o
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,-0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $bl_o
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    TextComponent trial_tr_p
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_p
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    TextComponent trial_tr_o
      color = yellow
      letterHeight = 0.1
      pos = (0.2,0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_o
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    TextComponent trial_br_p
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,-0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_p
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    TextComponent trial_br_o
      color = yellow
      letterHeight = 0.1
      pos = (0.2,-0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_o
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    TextComponent topleft_header
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (-0.13,0.57)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent topright_header
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (0.13,0.57)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent bottomtop_header
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent bottombottom_header
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,-0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent trial_header_p
      letterHeight = 0.1
      pos = (0, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $username
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    TextComponent trial_header_o
      color = yellow
      letterHeight = 0.1
      pos = (-0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $other_name
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    PolygonComponent left_choice
      fillColor = black
      lineWidth = 2
      opacity = 0.2
      pos = (-0.2, -0.7)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent leftchoice_text
      letterHeight = 0.1
      pos = (-0.2, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_text
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    PolygonComponent right_choice
      fillColor = black
      lineWidth = 2
      opacity = 0.2
      pos = (0.2, -0.7)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent rightchoice_text
      letterHeight = 0.1
      pos = (0.2, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $right_text
    MouseComponent trial_mouse
      clickable = left_choice, right_choice
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent make_your_choice_text
      letterHeight = 0.08
      pos = (0, -0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_bottom_text
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  Routine practice_trial
    PolygonComponent practice_top_left
      fillColor = $None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (-0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_right
      fillColor = $None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_left
      fillColor = $None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (-0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_right
      fillColor = $None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent practice_top_left1
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_p
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    TextComponent practice_topleft2
      color = $[0.506,0.506,0.506]
      letterHeight = 0.1
      pos = (-0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("({})".format(tl_o))
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    TextComponent practice_bottom_left1
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,-0.25)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $bl_p
    TextComponent practice_bottom_left2
      color = $[0.506,0.506,0.506]
      letterHeight = 0.1
      pos = (-0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("({})".format(bl_o))
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    TextComponent practice_top_right1
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_p
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    TextComponent practice_top_right2
      color = $[0.506,0.506,0.506]
      letterHeight = 0.1
      pos = (0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("({})".format(tr_o))
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    TextComponent practice_bottom_right1
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_p
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    TextComponent practice_bottom_right2
      color = $[0.506,0.506,0.506]
      letterHeight = 0.1
      pos = (0.2,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("({})".format(br_o))
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    TextComponent practice_topright_header
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (0.13,0.57)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_bottomtop_header
      color = $[0.506,0.506,0.506]
      letterHeight = 0.08
      pos = (-0.4,0.25)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_participant_header
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $participant_username
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    TextComponent practice_other_header
      color = $[0.506,0.506,0.506]
      letterHeight = 0.1
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      text = Other player
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    ImageComponent practice_avatar_trial
      image [set every repeat] = $chosen_avatar
      pos = (-0.2, 0.7)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    ImageComponent practice_other_avatar_trial
      image [set every repeat] = $other_avatar
      pos = (-0.8, 0)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    TextComponent practice_bottombottom_header
      color = $[0.506,0.506,0.506]
      letterHeight = 0.08
      pos = (-0.4,-0.25)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_topleft_header
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (-0.13,0.57)
      startVal [time (s)] = 0.0
      text = Cooperate
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  Routine hello_introduction
    TextComponent other_introduction_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Hello {}!".format(participant_username)
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    ImageComponent participant_avatar_other_intro
      image [set every repeat] = $chosen_avatar
      pos = (0.05, 0.2)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    MouseComponent other_intro_mouse
      clickable = continue_other_intro_text
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent continue_other_intro_text
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press here to continue
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  Routine end_other_game
    CodeComponent end_other_game_code
      Code Type = Py
      End Routine:
        #Choosing 2nd other avatar (random)
        del unselected_avatar[0] ##Removing first avatar used
        random.shuffle(unselected_avatar) ##Reshuffling available avatars
        other_avatar = unselected_avatar[0]
    TextComponent end_other_game_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = End of 1st game
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_outcome_matrix
    PolygonComponent top_left_2
      fillColor [set every repeat] = $tl_c
      fillColorSpace = rgb255
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (-0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent top_right_2
      fillColor [set every repeat] = $tr_c
      fillColorSpace = rgb255
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_left_2
      fillColor [set every repeat] = $bl_c
      fillColorSpace = rgb255
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (-0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_right_2
      fillColor [set every repeat] = $br_c
      fillColorSpace = rgb255
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent top_left1_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_p
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    TextComponent top_left2_2
      color = $[0.506,0.506,0.506]
      letterHeight = 0.1
      pos = (-0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("({})".format(tl_o))
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    TextComponent bottom_left1_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,-0.25)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $bl_p
    TextComponent bottom_left2_2
      color = $[0.506,0.506,0.506]
      letterHeight = 0.1
      pos = (-0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("({})".format(bl_o))
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    TextComponent top_right1_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_p
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    TextComponent top_right2_2
      color = $[0.506,0.506,0.506]
      letterHeight = 0.1
      pos = (0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("({})".format(tr_o))
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    TextComponent bottom_right1_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_p
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    TextComponent bottom_right2_2
      color = $[0.506,0.506,0.506]
      letterHeight = 0.1
      pos = (0.2,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("({})".format(br_o))
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    TextComponent topleft_header_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (-0.13,0.57)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent topright_header_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (0.13,0.57)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent bottomtop_header_2
      color = $[0.506,0.506,0.506]
      letterHeight = 0.08
      pos = (-0.4,0.25)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent bottombottom_header_2
      color = $[0.506,0.506,0.506]
      letterHeight = 0.08
      pos = (-0.4,-0.25)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent participant_header_2
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $participant_username
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    TextComponent other_header_2
      color = $[0.506,0.506,0.506]
      letterHeight = 0.1
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $other_name
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    MouseComponent resp_2
      clickable = trial_outcome_matrix_continue
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    ImageComponent participant_avatar_trial_2
      image [set every repeat] = $chosen_avatar
      pos = (-0.2, 0.7)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    ImageComponent other_avatar_trial_2
      image [set every repeat] = $other_avatar
      pos = (-0.8, 0)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    TextComponent trial_outcome_matrix_continue
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press here to see your total points so far!
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  Routine start
    TextComponent start_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In this task you will be asked to win points by either working with (cooperating) or working against (defecting) another player

        Try to gain as many point as possible and win the game

        We will begin by asking you to enter some details about yourself!
    TextComponent start_cont
      letterHeight = 0.08
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = click HERE to continue
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    MouseComponent start_mouse
      clickable = start_cont
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent random_order_code
      Code Type = Py
      Begin Experiment:
        import random
        order_list = ['A', 'B', 'C', 'D']
        random.shuffle(order_list)
        order = order_list[0]

        thisExp.addData('order', order)
  Routine practice_trial_1
    ImageComponent practice_avatar_1
      image [set every repeat] = $chosen_avatar
      pos = (-0.2, 0.7)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_left_1
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_right_1
      fillColor = $None
      lineWidth = 2
      pos = (0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_left_1
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_right_1
      fillColor = $None
      lineWidth = 2
      pos = (0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent practice_points_tl_p_1
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_p_intro
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    TextComponent practice_points_tl_o_1
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_o_intro
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    TextComponent practice_points_bl_p_1
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,-0.25)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $bl_p_intro
    TextComponent practice_points_bl_o_1
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $bl_o_intro
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    TextComponent practice_points_tr_p_1
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_p_intro
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    TextComponent practice_points_tr_o_1
      color = yellow
      letterHeight = 0.1
      pos = (0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_o_intro
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    TextComponent practice_points_br_p_1
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_p_intro
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    TextComponent practice_points_br_o_1
      color = yellow
      letterHeight = 0.1
      pos = (0.2,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_o_intro
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    TextComponent practice_tr_header_1
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (0.13,0.57)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_bt_header_1
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,0.25)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_p_header_1
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $username
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    TextComponent practice_o_header_1
      color = yellow
      letterHeight = 0.1
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      text = Other player
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    TextComponent practice_bb_header_1
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,-0.25)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_tl_header_1
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (-0.13,0.57)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_text_1
      letterHeight = 0.1
      pos = (0.6, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 0.5
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      text:
        This is what you will see for each trail of the game

        At the top of you can see your choices

        On the left you can see the other player's choices
    TextComponent practice_cont_1
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = click HERE to continue
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    MouseComponent practice_mouse_1
      clickable = practice_cont_1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine practice_trial_2
    ImageComponent practice_avatar_2
      image [set every repeat] = $chosen_avatar
      pos = (-0.2, 0.7)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_left_2
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_right_2
      fillColor = $None
      lineWidth = 2
      pos = (0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_left_2
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_right_2
      fillColor = $None
      lineWidth = 2
      pos = (0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent practice_points_tl_p_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_p_intro
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    TextComponent practice_points_tl_o_2
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_o_intro
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    TextComponent practice_points_bl_p_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,-0.25)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $bl_p_intro
    TextComponent practice_points_bl_o_2
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $bl_o_intro
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    TextComponent practice_points_tr_p_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_p_intro
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    TextComponent practice_points_tr_o_2
      color = yellow
      letterHeight = 0.1
      pos = (0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_o_intro
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    TextComponent practice_points_br_p_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_p_intro
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    TextComponent practice_points_br_o_2
      color = yellow
      letterHeight = 0.1
      pos = (0.2,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_o_intro
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    TextComponent practice_tr_header_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (0.13,0.57)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_bt_header_2
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,0.25)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_p_header_2
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $username
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    TextComponent practice_o_header_2
      color = yellow
      letterHeight = 0.1
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      text = Other player
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    TextComponent practice_bb_header_2
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,-0.25)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_tl_header_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (-0.13,0.57)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_text_2
      letterHeight = 0.1
      pos = (0.6, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 0.5
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      text:
        In the boxes you can see the amount of points you will win from your choice

        Your points are in WHITE

        The other player's points are in YELLOW
    TextComponent practice_cont_2
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = click HERE to continue
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    MouseComponent practice_mouse_2
      clickable = practice_cont_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine practice_trial_3
    ImageComponent practice_avatar_3
      image [set every repeat] = $chosen_avatar
      pos = (-0.2, 0.7)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_left_3
      fillColor = $[1.000,1.000,0.004]
      lineWidth = 2
      opacity = 0.2
      pos = (-0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_right_3
      fillColor = $None
      lineWidth = 2
      pos = (0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_left_3
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_right_3
      fillColor = $None
      lineWidth = 2
      pos = (0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent practice_points_tl_p_3
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_p_intro
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    TextComponent practice_points_tl_o_3
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_o_intro
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    TextComponent practice_points_bl_p_3
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,-0.25)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $bl_p_intro
    TextComponent practice_points_bl_o_3
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $bl_o_intro
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    TextComponent practice_points_tr_p_3
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_p_intro
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    TextComponent practice_points_tr_o_3
      color = yellow
      letterHeight = 0.1
      pos = (0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_o_intro
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    TextComponent practice_points_br_p_3
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_p_intro
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    TextComponent practice_points_br_o_3
      color = yellow
      letterHeight = 0.1
      pos = (0.2,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_o_intro
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    TextComponent practice_tr_header_3
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (0.13,0.57)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_bt_header_3
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,0.25)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_p_header_3
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $username
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    TextComponent practice_o_header_3
      color = yellow
      letterHeight = 0.1
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      text = Other player
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    TextComponent practice_bb_header_3
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,-0.25)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_tl_header_3
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (-0.13,0.57)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_text_3
      letterHeight = 0.1
      pos = (0.6, 0)
      startVal [time (s)] = 0.0
      text = For example, if both you and the other player choose to cooperate you will both get 1 point each
      wrapWidth = 0.5
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    TextComponent practice_cont_3
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = click HERE to continue
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    MouseComponent practice_mouse_3
      clickable = practice_cont_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine practice_trial_4
    ImageComponent practice_avatar_4
      image [set every repeat] = $chosen_avatar
      pos = (-0.2, 0.7)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_left_4
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_right_4
      fillColor = $None
      lineWidth = 2
      pos = (0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_left_4
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_right_4
      fillColor = $[1.000,1.000,0.004]
      lineWidth = 2
      opacity = 0.2
      pos = (0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent practice_points_tl_p_4
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_p_intro
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    TextComponent practice_points_tl_o_4
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_o_intro
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    TextComponent practice_points_bl_p_4
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,-0.25)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $bl_p_intro
    TextComponent practice_points_bl_o_4
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $bl_o_intro
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    TextComponent practice_points_tr_p_4
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_p_intro
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    TextComponent practice_points_tr_o_4
      color = yellow
      letterHeight = 0.1
      pos = (0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_o_intro
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    TextComponent practice_points_br_p_4
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_p_intro
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    TextComponent practice_points_br_o_4
      color = yellow
      letterHeight = 0.1
      pos = (0.2,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_o_intro
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    TextComponent practice_tr_header_4
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (0.13,0.57)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_bt_header_4
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,0.25)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_p_header_4
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $username
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    TextComponent practice_o_header_4
      color = yellow
      letterHeight = 0.1
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      text = Other player
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    TextComponent practice_bb_header_4
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,-0.25)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_tl_header_4
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (-0.13,0.57)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_text_4
      letterHeight = 0.1
      pos = (0.6, 0)
      startVal [time (s)] = 0.0
      text = If both you and the other player choose to defect you will both get 0.5 points each
      wrapWidth = 0.5
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    TextComponent practice_cont_4
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = click HERE to continue
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    MouseComponent practice_mouse_4
      clickable = practice_cont_4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine practice_trial_5
    ImageComponent practice_avatar_trial_5
      image [set every repeat] = $chosen_avatar
      pos = (-0.2, 0.7)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_left_5
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_right_5
      fillColor = $None
      lineWidth = 2
      pos = (0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_left_5
      fillColor = $[1.000,1.000,0.004]
      lineWidth = 2
      opacity = 0.2
      pos = (-0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_right_5
      fillColor = $None
      lineWidth = 2
      pos = (0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent practice_points_tl_p_5
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_p_intro
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    TextComponent practice_points_tl_o_5
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_o_intro
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    TextComponent practice_points_bl_p_5
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,-0.25)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $bl_p_intro
    TextComponent practice_points_bl_o_5
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $bl_o_intro
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    TextComponent practice_points_tr_p_5
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_p_intro
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    TextComponent practice_points_tr_o_5
      color = yellow
      letterHeight = 0.1
      pos = (0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_o_intro
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    TextComponent practice_points_br_p_5
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_p_intro
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    TextComponent practice_points_br_o_5
      color = yellow
      letterHeight = 0.1
      pos = (0.2,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_o_intro
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    TextComponent practice_tr_header_5
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (0.13,0.57)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_bt_header_5
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,0.25)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_p_header_5
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $username
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    TextComponent practice_o_header_5
      color = yellow
      letterHeight = 0.1
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      text = Other player
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    TextComponent practice_bb_header_5
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,-0.25)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_tl_header_5
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (-0.13,0.57)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_text_5
      letterHeight = 0.1
      pos = (0.6, 0)
      startVal [time (s)] = 0.0
      text = If you choose to cooperate but the other player chooses to defect, you will get 0 points and the other player will get 1.5 points
      wrapWidth = 0.5
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    TextComponent practice_cont_5
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = click HERE to continue
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    MouseComponent practice_mouse_5
      clickable = practice_cont_5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine practice_trial_6
    ImageComponent practice_avatar_6
      image [set every repeat] = $chosen_avatar
      pos = (-0.2, 0.7)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_left_6
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_right_6
      fillColor = $[1.000,1.000,0.004]
      lineWidth = 2
      opacity = 0.2
      pos = (0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_left_6
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_right_6
      fillColor = $None
      lineWidth = 2
      pos = (0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent practice_points_tl_p_6
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_p_intro
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    TextComponent practice_points_tl_o_6
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_o_intro
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    TextComponent practice_points_bl_p_6
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,-0.25)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $bl_p_intro
    TextComponent practice_points_bl_o_6
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $bl_o_intro
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    TextComponent practice_points_tr_p_6
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_p_intro
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    TextComponent practice_points_tr_o_6
      color = yellow
      letterHeight = 0.1
      pos = (0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_o_intro
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    TextComponent practice_points_br_p_6
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_p_intro
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    TextComponent practice_points_br_o_6
      color = yellow
      letterHeight = 0.1
      pos = (0.2,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_o_intro
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    TextComponent practice_tr_header_6
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (0.13,0.57)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_bt_header_6
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,0.25)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_p_header_6
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $username
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    TextComponent practice_o_header_6
      color = yellow
      letterHeight = 0.1
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      text = Other player
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    TextComponent practice_bb_header_6
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,-0.25)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_tl_header_6
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (-0.13,0.57)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_text_6
      letterHeight = 0.1
      pos = (0.6, 0)
      startVal [time (s)] = 0.0
      text = Finally, if you choose to defect and the other player chooses to cooperate you will get 1.5 points and the other player will get 0 points
      wrapWidth = 0.5
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    TextComponent practice_cont_6
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = click HERE to continue
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    MouseComponent practice_mouse_6
      clickable = practice_cont_6
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine practice_trial_7
    ImageComponent practice_avatar_7
      image [set every repeat] = $chosen_avatar
      pos = (-0.2, 0.7)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_left_7
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_top_right_7
      fillColor = $None
      lineWidth = 2
      pos = (0.14,0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_left_7
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_right_7
      fillColor = $None
      lineWidth = 2
      pos = (0.14,-0.25)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent practice_points_tl_p_7
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_p_intro
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    TextComponent practice_points_tl_o_7
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tl_o_intro
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    TextComponent practice_points_bl_p_7
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (-0.2,-0.25)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $bl_p_intro
    TextComponent practice_points_bl_o_7
      color = yellow
      letterHeight = 0.1
      pos = (-0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $bl_o_intro
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    TextComponent practice_points_tr_p_7
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_p_intro
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    TextComponent practice_points_tr_o_7
      color = yellow
      letterHeight = 0.1
      pos = (0.2,0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tr_o_intro
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    TextComponent practice_points_br_p_7
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      pos = (0.1,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_p_intro
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    TextComponent practice_points_br_o_7
      color = yellow
      letterHeight = 0.1
      pos = (0.2,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $br_o_intro
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    TextComponent practice_tr_header_7
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (0.13,0.57)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_bt_header_7
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,0.25)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_p_header_7
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $username
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    TextComponent practice_other_header_7
      color = yellow
      letterHeight = 0.1
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      text = Other player
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    TextComponent practice_bb_header_7
      color = yellow
      letterHeight = 0.08
      pos = (-0.4,-0.25)
      startVal [time (s)] = 0.0
      text = Defect
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    TextComponent practice_tl_header_7
      color = $[1.000,1.000,1.000]
      letterHeight = 0.08
      pos = (-0.13,0.57)
      startVal [time (s)] = 0.0
      text = Cooperate
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    TextComponent practice_text_7
      letterHeight = 0.1
      pos = (0.6, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 0.5
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      text:
        You will not know the other player's choice before you have made yours!

        After you have made your choice, you will find out the other player's decision and the amount of points you have won
    TextComponent practice_cont_7
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = click HERE to continue
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    MouseComponent practice_mouse_7
      clickable = practice_cont_7
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine name
    CodeComponent username_code
      Code Type = Py
      End Routine:
        username = type_name.text
    TextComponent name_text
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Type your name:
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    TextboxComponent type_name
      bold = False
      editable = True
      letterHeight = 0.1
      pos = (0, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent name_cont
      letterHeight = 0.08
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = click HERE to continue
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    MouseComponent name_mouse
      clickable = name_cont
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine avatar
    CodeComponent avatar_code
      Code Type = Py
      Each Frame:
        #Saying what avatar has been selected
        if avatar_mouse.isPressedIn(avatar1):
            continueRoutine = False
            thisExp.addData('selected_avatar', 'avatar1')
            chosen_avatar = "avatar1.png"
            unselected_avatar = ['avatar2.png', 'avatar3.png', 'avatar4.png', 'avatar5.png', 'avatar6.png']
        elif avatar_mouse.isPressedIn(avatar2):
            continueRoutine = False
            thisExp.addData('selected_avatar', 'avatar2')
            chosen_avatar = "avatar2.png"
            unselected_avatar = ['avatar1.png', 'avatar3.png', 'avatar4.png', 'avatar5.png', 'avatar6.png']
        elif avatar_mouse.isPressedIn(avatar3):
            continueRoutine = False
            thisExp.addData('selected_avatar', 'avatar3')
            chosen_avatar = "avatar3.png"
            unselected_avatar = ['avatar1.png', 'avatar2.png', 'avatar4.png', 'avatar5.png', 'avatar6.png']
        elif avatar_mouse.isPressedIn(avatar4):
            continueRoutine = False
            thisExp.addData('selected_avatar', 'avatar4')
            chosen_avatar = "avatar4.png"
            unselected_avatar = ['avatar1.png', 'avatar2.png', 'avatar3.png', 'avatar5.png', 'avatar6.png']
        elif avatar_mouse.isPressedIn(avatar5):
            continueRoutine = False
            thisExp.addData('selected_avatar', 'avatar5')
            chosen_avatar = "avatar5.png"
            unselected_avatar = ['avatar1.png', 'avatar2.png', 'avatar3.png', 'avatar4.png', 'avatar6.png']
        elif avatar_mouse.isPressedIn(avatar6):
            continueRoutine = False
            thisExp.addData('selected_avatar', 'avatar6')
            chosen_avatar = "avatar6.png"
            unselected_avatar = ['avatar1.png', 'avatar2.png', 'avatar3.png', 'avatar4.png', 'avatar5.png']
    TextComponent avatar_text
      letterHeight = 0.1
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Choose an avatar!
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    ImageComponent avatar1
      image = avatar1.png
      pos = (-0.4, 0.4)
      saveStartStop = False
      size = (0.35, 0.6125)
      startVal [time (s)] = 0.0
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    ImageComponent avatar2
      image = avatar2.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (0.35, 0.6125)
      startVal [time (s)] = 0.0
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    ImageComponent avatar3
      image = avatar3.png
      pos = (0.4, 0.4)
      saveStartStop = False
      size = (0.35, 0.6125)
      startVal [time (s)] = 0.0
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    ImageComponent avatar4
      image = avatar4.png
      pos = (-0.4, -0.4)
      saveStartStop = False
      size = (0.35, 0.6125)
      startVal [time (s)] = 0.0
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    ImageComponent avatar5
      image = avatar5.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.35, 0.6125)
      startVal [time (s)] = 0.0
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    ImageComponent avatar6
      image = avatar6.png
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (0.35, 0.6125)
      startVal [time (s)] = 0.0
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    MouseComponent avatar_mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent intro_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this task you will win points by either choosing to cooperate with or defect against another player.

        Both you and the other player will make your choice and then your decisions will be revealed.

        You will receive points based on both of your choices.

        You will play against two different other player's in seperate games.
    TextComponent intro_cont
      letterHeight = 0.08
      pos = (0, -0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = click HERE to continue
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    MouseComponent intro_mouse
      clickable = intro_cont
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine OP_introduction
    CodeComponent o_intro_code
      Code Type = Py
      Begin Routine:
        #Setting points to 0 for first trial with each other
        participant_points_total = 0
        other_points_total = 0

        #Choosing other avatar (random)
        if initial_choice_loop.thisTrialN == 0:
            random.shuffle(unselected_avatar)
            other_avatar = unselected_avatar[0]
        elif initial_choice_loop.thisTrialN > 0 :
            del unselected_avatar[0]
            random.shuffle(unselected_avatar)
            other_avatar = unselected_avatar[0]

        initial_choice_loop.addData('other_avatar', other_avatar)
    TextComponent o_intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Hello {} !\n\n\n\nIn this game you will be playing with {}!".format(username, other_name)
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    ImageComponent o_intro_avatar_p
      image [set every repeat] = $chosen_avatar
      pos = (0.55, 0.3)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    ImageComponent o_intro_avatar_o
      image [set every repeat] = $other_avatar
      pos = (0.55, -0.2)
      size = (0.0875, 0.153125)
      startVal [time (s)] = 0.0
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    TextComponent o_intro_cont
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = click HERE to continue
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    MouseComponent o_intro_mouse
      clickable = o_intro_cont
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        #Changing position of stimuli based on player's position
        if choice_dd[0]=='Y':
            core.wait(5)

        if participant_points_total > other_points_total or participant_points_total == other_points_total:
            p_av = (-0.3,-0.45)
            o_av = (-0.3, - 0.6)
            p_name = (0, -0.45)
            o_name = (0, - 0.6)
            p_points = (0.3, -0.45)
            o_points = (0.3, - 0.6)
        elif participant_points_total < other_points_total:
            p_av = (-0.3, - 0.6)
            o_av = (-0.3, -0.45)
            p_name = (0, - 0.6)
            o_name = (0, -0.45)
            p_points = (0.3, - 0.6)
            o_points = (0.3, -0.45)
    ImageComponent feedback_scoreboard_o
      image [set every repeat] = $other_avatar
      pos [set every repeat] = o_av
      size = (0.07, 0.1225)
      startVal [time (s)] = 0.0
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    ImageComponent feedback_scoreboard_p
      image [set every repeat] = $chosen_avatar
      pos [set every repeat] = p_av
      size = (0.07, 0.1225)
      startVal [time (s)] = 0.0
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    ImageComponent feedback_avatar_o
      image [set every repeat] = $other_avatar
      pos = (-0.5, 0.2)
      size = (0.13125, 0.2296875)
      startVal [time (s)] = 0.0
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    ImageComponent feedback_avatar_p
      image [set every repeat] = $chosen_avatar
      pos = (-0.5, 0.6)
      size = (0.13125, 0.2296875)
      startVal [time (s)] = 0.0
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    TextComponent feedback_choice_p
      letterHeight = 0.12
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You chose to {}".format(choice)
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    TextComponent feedback_choice_o
      color = yellow
      letterHeight = 0.12
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"{} chose to {}".format(other_name, other_choice)
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    TextComponent feedback_points_p
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You gain {} points".format(participant_points)
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    TextComponent feedback_points_o
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"{} gains {} points".format(other_name, other_points)
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    TextComponent feedback_total_p
      letterHeight = 0.08
      pos [set every repeat] = p_points
      startVal [time (s)] = 0.0
      text [set every repeat] = $participant_points_total
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    TextComponent feedback_total_o
      color = yellow
      letterHeight = 0.08
      pos [set every repeat] = o_points
      startVal [time (s)] = 0.0
      text [set every repeat] = $other_points_total
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    TextComponent feedback_name_p
      letterHeight = 0.08
      pos [set every repeat] = p_name
      startVal [time (s)] = 0.0
      text [set every repeat] = $username
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    TextComponent feedback_name_o
      color = yellow
      letterHeight = 0.08
      pos [set every repeat] = o_name
      startVal [time (s)] = 0.0
      text [set every repeat] = $other_name
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    TextComponent feedback_scoreboard
      letterHeight = 0.09
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Total Points
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    TextComponent feedback_cont
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = click HERE for next trial
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    MouseComponent feedback_mouse
      clickable = feedback_cont
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine score
    CodeComponent scoreboard_code
      Code Type = Py
      Begin Routine:
        #Changing position of stimuli based on player's position
        if participant_points_total > other_points_total or participant_points_total == other_points_total:
            p_av = (-0.3, 0.2)
            o_av = (-0.3, - 0.2)
            p_name = (0, 0.2)
            o_name = (0, - 0.2)
            p_points = (0.3, 0.2)
            o_points = (0.3, -0.2)
        elif participant_points_total < other_points_total:
            p_av = (-0.3, -0.2)
            o_av = (-0.3, 0.2)
            p_name = (0, -0.2)
            o_name = (0, 0.2)
            p_points = (0.3, - 0.2)
            o_points = (0.3, 0.2)


        #Changing text at bottom
        if initial_choice_loop.thisTrialN == 0:
            scoreboard_continue_text_message = "click HERE to play against a new person!"
        else:
            scoreboard_continue_text_message = "click HERE to continue"
    TextComponent p_total_text
      letterHeight = 0.1
      pos [set every repeat] = p_points
      startVal [time (s)] = 0.0
      text [set every repeat] = $participant_points_total
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    TextComponent o_total_text
      letterHeight = 0.1
      pos [set every repeat] = o_points
      startVal [time (s)] = 0.0
      text [set every repeat] = $other_points_total
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    ImageComponent participant_avatar_scoreboard
      image [set every repeat] = $chosen_avatar
      pos [set every repeat] = p_av
      size = (0.175, 0.30625)
      startVal [time (s)] = 0.0
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    TextComponent p_name_text
      letterHeight = 0.1
      pos [set every repeat] = p_name
      startVal [time (s)] = 0.0
      text [set every repeat] = $username
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    TextComponent o_name_text
      letterHeight = 0.1
      pos [set every repeat] = o_name
      startVal [time (s)] = 0.0
      text [set every repeat] = $other_name
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    ImageComponent other_avatar_scoreboard
      image [set every repeat] = $other_avatar
      pos [set every repeat] = o_av
      size = (0.175, 0.30625)
      startVal [time (s)] = 0.0
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    TextComponent name_header
      letterHeight = 0.15
      pos = (-0.15, 0.5)
      startVal [time (s)] = 0.0
      text = Player
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    TextComponent total_point_header
      letterHeight = 0.15
      pos = (0.3, 0.5)
      startVal [time (s)] = 0.0
      text = Total Points
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    TextComponent scoreboard_cont_text
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scoreboard_continue_text_message
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    MouseComponent scoreabord_mouse
      clickable = scoreboard_cont_text
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent scoreboard_intro_text
      letterHeight = 0.09
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Well done you have finished playing with {}!".format(other_name)
      wrapWidth = 1.2
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  Routine finish
    TextComponent end_routine_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Well done you have finished the task!
    TextComponent end_routine_continue_text
      letterHeight = 0.09
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = click HERE to close the task
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    MouseComponent end_routine_mouse
      clickable = end_routine_continue_text
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine practice_trial_8
    TextComponent practice_choice_p_8
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $'You chose to defect'
    TextComponent practice_choice_o_8
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Other player chose to cooperate"
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    TextComponent practice_points_p_8
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You gain {} points".format(tr_p_intro)
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    TextComponent practice_points_o_8
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Other player gains {} points".format(tr_o_intro)
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    PolygonComponent practice_bottom_left_8
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,-0.4)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent practice_bottom_right_8
      fillColor = $None
      lineWidth = 2
      pos = (0.14,-0.4)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent practice_bl_text_8
      letterHeight = 0.1
      pos = (-0.14, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'No\n{}'.format(bl_o_intro)
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    TextComponent practice_br_text_8
      letterHeight = 0.1
      pos = (0.14, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Yes\n{}x{}'.format(bl_o_intro, mult_intro)
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    TextComponent practice_mult_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Multiply your points?
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    TextComponent practice_text_8
      letterHeight = 0.1
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      text = Each time you win points, you will be able to multiply them, however after waiting some delay
      wrapWidth = 0.5
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    TextComponent practice_cont_8
      letterHeight = 0.08
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = click HERE to start your first game
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    MouseComponent practice_mouse_8
      clickable = practice_cont_8
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine multiply
    CodeComponent mult_code
      Code Type = Py
      Begin Routine:
        #Changing position of stimuli based on player's position
        if participant_points==0:
            continueRoutine=False
            choice_dd='Z'

        if participant_points_total > other_points_total or participant_points_total == other_points_total:
            p_av = (-0.3,-0.45)
            o_av = (-0.3, - 0.6)
            p_name = (0, -0.45)
            o_name = (0, - 0.6)
            p_points = (0.3, -0.45)
            o_points = (0.3, - 0.6)
        elif participant_points_total < other_points_total:
            p_av = (-0.3, - 0.6)
            o_av = (-0.3, -0.45)
            p_name = (0, - 0.6)
            o_name = (0, -0.45)
            p_points = (0.3, - 0.6)
            o_points = (0.3, -0.45)

        #Randomising button order
        random.shuffle(button_list_dd)
        left_text_dd = button_list_dd[0]
        right_text_dd = button_list_dd[1]

        if trial_loop.thisTrialN == 0:
            mult=mult
        elif trial_loop.thisTrialN > 0:
            if choice_list_dd[-1]=='Y' and mult>=1.2:
                mult=mult-increment
            elif choice_list_dd[-1]=='Y' and mult<1.2:
                mult=mult
            elif choice_list_dd[-1]=='N' and mult<=2.8:
                mult=mult+increment
            elif choice_list_dd[-1]=='N' and mult>2.8:
                mult=mult

        if left_text_dd=='Yes':
            left_text_dd='Yes\n{}x{}'.format(round(participant_points,1),mult)
        elif left_text_dd=='No':
            left_text_dd='No\n{}'.format(round(participant_points,1))

        if right_text_dd=='Yes':
            right_text_dd='Yes\n{}x{}'.format(round(participant_points,1),mult)
        elif right_text_dd=='No':
            right_text_dd='No\n{}'.format(round(participant_points,1))

        #Changing bottom text to only show on first trial
        if trial_loop.thisTrialN == 0:
            trial_bottom_text = "Make your choice by clicking one of the boxes"
        else:
            trial_bottom_text = "                                             "
      End Routine:
        #Adding button text to data file
        trial_loop.addData('left_text_dd', left_text_dd)
        trial_loop.addData('right_text_dd', right_text_dd)

        #Saving choice
        if trial_mouse.isPressedIn(mult_left):
            choice_dd = left_text_dd[0]
        elif trial_mouse.isPressedIn(mult_right):
            choice_dd = right_text_dd[0]
        trial_loop.addData('choice_dd', choice_dd)

        choice_list_dd.append(choice_dd)

        if choice_dd=='Y':
            participant_points=round(participant_points*mult,1)

        participant_points_total+=round(participant_points,1)

        trial_loop.addData('participant_points_multiplied', participant_points)
        trial_loop.addData('participant_points_total', participant_points_total)
    ImageComponent mult_avatar_o
      image [set every repeat] = $other_avatar
      pos = (-0.5, 0.3)
      size = (0.13125, 0.2296875)
      startVal [time (s)] = 0.0
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    ImageComponent mult_avatar_p
      image [set every repeat] = $chosen_avatar
      pos = (-0.5, 0.7)
      size = (0.13125, 0.2296875)
      startVal [time (s)] = 0.0
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    TextComponent mult_choice_p
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You chose to {}".format(choice)
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    TextComponent mult_choice_o
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"{} chose to {}".format(other_name, other_choice)
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    TextComponent mult_points_p
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You gain {} points".format(participant_points)
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    TextComponent mult_points_o
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"{} gains {} points".format(other_name, other_points)
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    PolygonComponent mult_left
      fillColor = $None
      lineWidth = 2
      pos = (-0.14,-0.4)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 4
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    TextComponent mult_left_text
      letterHeight = 0.1
      pos = (-0.14, -0.4)
      startVal [time (s)] = 4
      text [set every repeat] = $left_text_dd
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    PolygonComponent mult_right
      fillColor = $None
      lineWidth = 2
      pos = (0.14,-0.4)
      shape = rectangle
      size = (0.28, 0.5)
      startVal [time (s)] = 4
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    TextComponent mult_right_text
      letterHeight = 0.1
      pos = (0.14, -0.4)
      startVal [time (s)] = 4
      text [set every repeat] = $right_text_dd
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    TextComponent mult_mult
      letterHeight = 0.1
      startVal [time (s)] = 4
      text = Multiply your points?
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    TextComponent make_your_choice_text_2
      letterHeight = 0.08
      pos = (0, -0.9)
      saveStartStop = False
      startVal [time (s)] = 4
      text [set every repeat] = $trial_bottom_text
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    MouseComponent mult_mouse
      clickable = mult_left, mult_right
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 4
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Flow
  Routine start
  Routine name
  Routine avatar
  Routine intro
  LoopInitiator practice_loop loopType="TrialHandler"
    conditions = [{'tl_p_intro': 1, 'tl_o_intro': 1, 'bl_p_intro': 0, 'bl_o_intro': 1.5, 'tr_p_intro': 1.5, 'tr_o_intro': 0, 'br_p_intro': 0.5, 'br_o_intro': 0.5, 'mult_intro': 2}]
    conditionsFile = payoff_matrices_intro.xlsx
    loopType = sequential
    nReps = 1
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    Routine practice_trial_1
    Routine practice_trial_2
    Routine practice_trial_3
    Routine practice_trial_4
    Routine practice_trial_5
    Routine practice_trial_6
    Routine practice_trial_7
    Routine practice_trial_8
  LoopTerminator practice_loop
  LoopInitiator initial_choice_loop loopType="TrialHandler"
    conditionsFile = $'other_player_initial_choice'+order+'.xlsx'
    loopType = sequential
    nReps = 1
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    Routine OP_introduction
    LoopInitiator trial_loop loopType="TrialHandler"
      conditionsFile = payoff_matrices_coop_defect.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'tl_p': 54, 'tl_o': 54, 'bl_p': 0, 'bl_o': 81, 'tr_p': 81, 'tr_o': 0, 'br_p': 27, 'br_o': 27},
        {'tl_p': 2, 'tl_o': 2, 'bl_p': 0, 'bl_o': 3, 'tr_p': 3, 'tr_o': 0, 'br_p': 1, 'br_o': 1},
        {'tl_p': 6, 'tl_o': 6, 'bl_p': 0, 'bl_o': 9, 'tr_p': 9, 'tr_o': 0, 'br_p': 3, 'br_o': 3},
        {'tl_p': 8, 'tl_o': 8, 'bl_p': 0, 'bl_o': 12, 'tr_p': 12, 'tr_o': 0, 'br_p': 4, 'br_o': 4},
        {'tl_p': 12, 'tl_o': 12, 'bl_p': 0, 'bl_o': 18, 'tr_p': 18, 'tr_o': 0, 'br_p': 6, 'br_o': 6},
        {'tl_p': 14, 'tl_o': 14, 'bl_p': 0, 'bl_o': 21, 'tr_p': 21, 'tr_o': 0, 'br_p': 7, 'br_o': 7},
        {'tl_p': 16, 'tl_o': 16, 'bl_p': 0, 'bl_o': 24, 'tr_p': 24, 'tr_o': 0, 'br_p': 8, 'br_o': 8},
        {'tl_p': 20, 'tl_o': 20, 'bl_p': 0, 'bl_o': 30, 'tr_p': 30, 'tr_o': 0, 'br_p': 10, 'br_o': 10},
        {'tl_p': 26, 'tl_o': 26, 'bl_p': 0, 'bl_o': 39, 'tr_p': 39, 'tr_o': 0, 'br_p': 13, 'br_o': 13},
        {'tl_p': 30, 'tl_o': 30, 'bl_p': 0, 'bl_o': 45, 'tr_p': 45, 'tr_o': 0, 'br_p': 15, 'br_o': 15},
        {'tl_p': 34, 'tl_o': 34, 'bl_p': 0, 'bl_o': 51, 'tr_p': 51, 'tr_o': 0, 'br_p': 17, 'br_o': 17},
        {'tl_p': 40, 'tl_o': 40, 'bl_p': 0, 'bl_o': 60, 'tr_p': 60, 'tr_o': 0, 'br_p': 20, 'br_o': 20},
        {'tl_p': 42, 'tl_o': 42, 'bl_p': 0, 'bl_o': 63, 'tr_p': 63, 'tr_o': 0, 'br_p': 21, 'br_o': 21},
        {'tl_p': 44, 'tl_o': 44, 'bl_p': 0, 'bl_o': 66, 'tr_p': 66, 'tr_o': 0, 'br_p': 22, 'br_o': 22},
        {'tl_p': 46, 'tl_o': 46, 'bl_p': 0, 'bl_o': 69, 'tr_p': 69, 'tr_o': 0, 'br_p': 23, 'br_o': 23},
        {'tl_p': 56, 'tl_o': 56, 'bl_p': 0, 'bl_o': 84, 'tr_p': 84, 'tr_o': 0, 'br_p': 28, 'br_o': 28}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
      Routine trial
      Routine multiply
      Routine feedback
    LoopTerminator trial_loop
    Routine score
  LoopTerminator initial_choice_loop
  Routine finish
